PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  blendMode = add
  expName = v1
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    ImageComponent fondo_eleccion
      image = fondo_eleccion.png
      pos = [0.0, 0.0]
      size = [2.0, 2.0]
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent textbox_3
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      fillColor = 1.0000, 0.8431, 0.6078
      letterHeight = 0.05
      overflow = scroll
      pos = 0,0
      size = 170,100
      startVal [time (s)] = 0.0
      text = Hola3
      units = pix
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Flow
  Routine trial
