PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = v2
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    ImageComponent fondo
      image = fondo_eleccion.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent textbox
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[1][2]
      size = 0.08854166667	,0.09259259259
      startVal [time (s)] = 0.0
      units = norm
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      text:
        3000
         CLP
    CodeComponent code_1
      Code Type = Auto->JS
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      Before Experiment:
        # 1. Definir las listas de coordenadas
        x_coords = [-0.4, 0.08541666667, 0.5645833333]
        y_coords = [0.3518518519, 0.1296296296, -0.09259259259, -0.3148148148, -0.537037037, -0.7592592593]

        # 2. Crear la matriz anidada usando una lista de comprensión
        # La estructura es positions[indice_x][indice_y]
        positions = [[(x, y) for y in y_coords] for x in x_coords]
    TextboxComponent textbox_2
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = -0.4	,0.3518518519
      size = 0.08854166667	,0.09259259259
      startVal [time (s)] = 0.0
      units = norm
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      text:
        3000
         CLP
    TextboxComponent textbox_3
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[1][3]
      size = 0.08854166667	,0.09259259259
      startVal [time (s)] = 0.0
      units = norm
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      text:
        3000
         CLP
    TextboxComponent textbox_4
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[2][1]
      size = 0.08854166667	,0.09259259259
      startVal [time (s)] = 0.0
      units = norm
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      text:
        3000
         CLP
Flow
  Routine trial
